---
API: 3
OpenSesame: 4.0.24
Platform: nt
---
set width 1920
set title YarbusDataVis
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "C:\\Users\\yarbus\\Desktop\\Team Tarsier\\Mile4-Pilot"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background "#3d3846"

define sketchpad Instruction
	set duration keypress
	set description "Stimuli anzeigen"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=True text="The experiment contains 5 blocks with 4 trials each.<br />In each block you will solve tasks on a different visualization.<br />For each trial, a task will be shown. After you carefully read the task, press SPACE to show the visualization. Try to solve the task now. <br />If you think you have a good answer, press SPACE to get to the next trial. <br />You will automatically get to the next trial after a timeout of 45 seconds.<br />Each block starts with a fixation dot to see if the eye tracker is still calibrated.<br />" x=0 y=0 z_index=0

define sketchpad Pause
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=True text="Press SPACE if you feel ready to continue the experiment." x=0 y=0 z_index=0

define sketchpad What_is_stacked_bar_chart
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="What is Stacked Bar Chart.jpg" scale=1 show_if=True x=0 y=0 z_index=0

define loop block_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Führt wiederholt ein anderes Element aus"
	set cycles 5
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 block_id 1
	setcycle 0 image_file "Test1.png"
	setcycle 1 block_id 2
	setcycle 1 image_file "Test2.png"
	setcycle 2 block_id 3
	setcycle 2 image_file "Test3.png"
	setcycle 3 block_id 4
	setcycle 3 image_file "Test4.png"
	setcycle 4 block_id 5
	setcycle 4 image_file "Test5.png"
	run block_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "Führt eine Anzahl von Elementen in einer Sequenz aus"
	run Pause True
	run new_pygaze_start_recording True
	run show_fixation_cross True
	run fixation True
	run fixation_detection True
	run hide_fixation_cross True
	run recalibration True
	run trial_loop True
	run pygaze_stop_recording True

define pygaze_init calibration
	set tracker_type OpenGaze
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initializes and calibrates the eye tracker"
	set calibrate yes
	set calbeep yes
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile automatic

define sequence experiment
	set flush_keyboard yes
	set description "Führt eine Anzahl von Elementen in einer Sequenz aus"
	run welcome True
	run What_is_stacked_bar_chart True
	run calibration True
	run Instruction True
	run new_audio_low_latency_record_init True
	run block_loop True
	run goodbye True

define sketchpad fixation
	set duration 0
	set description "Stimuli anzeigen"
	draw fixdot color=white show_if=True style=default x=0 y=0 z_index=0

define inline_script fixation_detection
	set description "Führt Python-Code aus"
	___run__
	import math
	
	# Get the start time
	t0 = clock.time()
	
	central_fixation = False
	
	# Compute the screen center coordinates
	center = (exp.resolution()[0]/2, exp.resolution()[1]/2)
	
	calibrate = False
	
	# Wait for a central fixation
	while not central_fixation:
	    # Get  a current (x,y) sample from the tracker (frame of reference with (0,0) at left top)
	    gazepos = eyetracker.sample()
	    # Check the distance between the sample and the centre of the screen
	    d = math.sqrt((gazepos[0] - center[0])**2 + (gazepos[1] - center[1])**2)
	    # Check if the distance is "small enough"
	    if d < 50:
	        central_fixation = True
	    
	    # Check for timeout
	    if clock.time() - t0 > 5000:
	        calibrate = True
	        break
	    
	# Add a pause
	#clock.sleep(1000)
	__end__
	set _prepare ""

define sketchpad goodbye
	set duration keypress
	set description "Stimuli anzeigen"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=True text="The experiment is finished.<br />Thank you for participating!<br /><br />Press any key to exit." x=0 y=0 z_index=0

define pygaze_log hide_fixation_cross
	set throttle 16
	set msg HIDE_FIXATION_CROSS
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define keyboard_response hide_task
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Sammelt Tastaturantworten"

define audio_low_latency_record_init new_audio_low_latency_record_init
	set verbose yes
	set samplerate 44100
	set periods 4
	set period_size 1024
	set module "SoundDevice (PortAudio)"
	set dummy_mode no
	set device_name "Tischmikrofon (RØDE NT-USB Mini)"
	set description "Low Latency Audio - initializes the recording audio device"
	set channels 2
	set bitdepth 16

define audio_low_latency_record_start new_audio_low_latency_record_start
	set stop ""
	set ram_cache no
	set pause_resume ""
	set filename trial
	set file_exists_action yes
	set duration infinite
	set description "Low Latency Audio - starts audio recording in the background"
	set delay_stop 0
	set delay_start 0

define audio_low_latency_record_stop new_audio_low_latency_record_stop
	set description "Low Latency Audio - stops the background audio recording"

define pygaze_start_recording new_pygaze_start_recording
	set status_msg start_trial
	set description "Puts the eye tracker out of recording mode"

define pygaze_log pygaze_log_hide_stimulus
	set throttle 16
	set msg HIDE_STIMULUS
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_log pygaze_log_show_stimulus
	set throttle 16
	set msg SHOW_STIMULUS
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_stop_recording pygaze_stop_recording
	set status_msg stop_trial
	set description ""

define inline_script recalibration
	set description "Führt Python-Code aus"
	___run__
	if calibrate:
	    eyetracker.calibrate()
	__end__
	set _prepare ""

define pygaze_log show_fixation_cross
	set throttle 16
	set msg SHOW_FIXATION_CROSS
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define sketchpad stimulus
	set duration 0
	set description "Stimuli anzeigen"
	draw image center=1 file="[image_file]" scale=1 show_if=True x=0 y=0 z_index=0

define inline_script task_presentation
	set description "Führt Python-Code aus"
	set _run "canvas.show()"
	___prepare__
	tasks = [
	    [
	        "How do you predict the total sales (in millions) will develop over the next 5 years?",
	        "In which year did the kitchen devices division record the highest sales?",
	        "Which division made the most sales?",
	        "Are there any problems in the visualization?"
	    ],
	    [
	        "Do you think that game sales will increase next year?",
	        "What were the sales of kitchen devices in 2007?",
	        "In which year was there the biggest outlier in sales?",
	        "In which year had the TV division the highest contribution to overall sales?"
	    ], 
	    [
	        "What is the estimated average of total sales over all years?",
	        "Assume you are a manager and you need to close one division? Which one would it be?",
	        "Try to memorize the content of the visualization.",
	        "In which years the the company have sales between 60 and 80 Million Dollars?"
	    ],
	    [
	    	"Summarize what you can observe in the visualization.",
	        "Which division had the largest growth in sales between to consecutive years?",
	        "In which year did the biggest decrease in overall sales happen? Estimate the shrinkage.",
	        "Your sales are not looking good. In which division, based on the information you have, would you invest money to save the company?"
	    ],
	    [
	        "Which two years had exactly the same sales?",
	        "In which year were the sales of the kitchen division larger: 1985 or 2017?",
	        "Are there divisions where the sales numbers correlate? If yes, which ones?",
	        "Assume you are the new manager of the kitchen device division and inspect the data. Do you find any sales numbers of your                     department that look strange in your eyes?"
	    ]
	]
	
	task = tasks[block_id-1][trial_id-1]
	
	canvas = Canvas()
	canvas += Text(task, color='white', font_size=35)
	__end__

define inline_script timeout
	set description "Executes Python code"
	___run__
	my_keyboard = Keyboard(keylist=['space'])
	key, end_time = my_keyboard.get_key(timeout=45000)
	
	
	        
	    
	        
	    
	__end__
	set _prepare ""

define logger trial_logger
	set description "Protokolliert experimentelle Daten"
	set auto_log yes

define loop trial_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Führt wiederholt ein anderes Element aus"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 trial_id 1
	setcycle 1 trial_id 2
	setcycle 2 trial_id 3
	setcycle 3 trial_id 4
	run trial_sequence

define sequence trial_sequence
	set flush_keyboard yes
	set description "Führt eine Anzahl von Elementen in einer Sequenz aus"
	run task_presentation True
	run new_audio_low_latency_record_start True
	run hide_task True
	run pygaze_log_show_stimulus True
	run stimulus True
	run timeout True
	run pygaze_log_hide_stimulus True
	run trial_logger True
	run new_audio_low_latency_record_stop True

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Stimuli anzeigen"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=True text="Thank you for participating in our eye-tracking experiment.<br />In the next page, you will see informative explanation about visualization.<br />After that we calibrate the eye tracker. <br />Please try to remain in a stable position during the experiment.<br />Press SPACE to proceed." x=0 y=0 z_index=0

